#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    nicard:
        module.Class: 'national_instruments_x_series.NationalInstrumentsXSeries'
        photon_sources:
            - '/Dev1/PFI0'
        clock_channel: '/Dev1/Ctr0'
        default_clock_frequency: 100 # optional, in Hz
        counter_channels:
            - '/Dev1/Ctr1'
        counter_ai_channels:
            - '/Dev1/AI0'
        default_scanner_clock_frequency: 100 # optional, in Hz
        scanner_clock_channel: '/Dev1/Ctr2'
        odmr_trigger_channel: '/Dev2/PFI12'
        pixel_clock_channel: '/Dev1/PFI6'
        counting_edge_rising: True
        gate_in_channel:
            - '/Dev1/PFI13'
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
        scanner_ai_channels:
            - '/Dev1/AI1'
        scanner_counter_channels:
            - '/Dev1/Ctr3'
        scanner_voltage_ranges:
            - [0, 10]
            - [0, 10]
            - [0, 10]
        scanner_position_ranges:
            - [0e-6, 80e-6]
            - [0e-6, 80e-6]
            - [-40e-6, 40e-6]


    timetagger_fastcounter:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        timetagger_channel_apd_0: 7
        timetagger_channel_apd_1: 1
        timetagger_channel_detect: 6
        timetagger_channel_sequence: 5
        timetagger_sum_channels: 0

    timetagger_count_between_markers:
        module.Class: 'swabian_instruments.timetagger_between_markers.TimeTagger_CountBetweenMarkers'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        timetagger_channel_start: 6
        timetagger_channel_end: 7
        timetagger_channel_detect: 4
        timetagger_channel_sequence: 5
        timetagger_sum_channels: 0

    timetagger_slowcounter:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        timetagger_sum_channels: 0

    tt_odmr:
        module.Class: 'timetagger_odmr_counter.TimeTaggerODMRCounter'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        timetagger_channel_trigger: 6
    
    mw_smf100a:
        module.Class: 'microwave.mw_source_smf100a.MicrowaveSMF'
        smf_visa_address: 'TCPIP0::192.168.0.6::inst0::INSTR'
        smf_timeout: 100

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20

    heater:
        module.Class: 'RundS_power_supply_NGPX_70-5.Power_supply'
        gpib_address: 'GPIB0::17::INSTR' ## {'x': 'gpib0::15', 'y': 'gpib0::16', 'z': 'gpib0::17'}
        gpib_timeout: 30

    SMC_controller:
        module.Class: 'magnet.SMC_controller.SMC'

    AWG:
        module.Class: 'awg.QUEST_AWG.AWG_spectrum'
        tmp_work_dir: 'C:\\Users\\finklera\\Desktop\\temp_test_qudi'
        awg_ip_address: 192.168.150.10
        #awg_ip_address: 192.168.150.11
        #ftp_root_dir: 'C:\\inetpub\\ftproot'
        #ftp_login: 'user'
        #ftp_passwd: 'pass'
        #default_sample_rate: 1.2
        timeout: 30

    lasertoptica:
        module.Class: 'laser.toptica_ibeam_laser.TopticaIBeamLaser'
        interface: 'ASRL1::INSTR'
        maxpower: 100.0
        maxcurrent: 200.0

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    laserdummy:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

logic:

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'timetagger_slowcounter'
            savelogic: 'save'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'nicard'
            savelogic: 'save'

    scanner_slow_counter_interfuse:
        module.Class: 'interfuse.confocal_scanner_slow_counter_interfuse.SlowCounterScannerInterfuse'
        connect:
            confocalscanner1: 'nicard'
            counter1: 'timetagger_slowcounter'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        query_interval: '100'
        connect:
            laser: 'diode_laser'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'save'

    odmrlogic:
        module.Class: 'odmr_awg_logic.ODMRAWGLogic'
        scanmode: 'LIST'
        connect:
            odmrcounter: 'tt_odmr'
            fitlogic: 'fit'
            microwave1: 'mw_sgs100'
            savelogic: 'save'
            taskrunner: 'tasklogic'
            pulsegenerator: 'AWG'

    laserscanner:
        module.Class: 'laser_scanner_logic.LaserScannerLogic'
        connect:
            confocalscanner1: 'nicard'
            savelogic: 'save'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'nicard'

    magnet_control_logic:
        module.Class: 'magnet_control_logic.MagnetControlLogic'
        connect:
            counter: 'counterlogic'
            magnetstage: 'SMC_controller'
            savelogic: 'save'
            fitlogic: 'fit'

    qdplot:
        module.Class: 'qdplot_logic.QdplotLogic'
        connect:
            savelogic: 'save'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegenerator'

    sequencegenerator:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        assets_storage_path: C:\\Users\\finklera\\Desktop\\temp_test_qudi
        connect:
            pulsegenerator: 'AWG'

    pulseextraction:
        module.Class: 'pulsed.pulse_extractor.PulseExtractor'

    pulseanalysis:
        module.Class: 'pulsed.pulse_analyzer.PulseAnalyzer'
        connect:
            fastcounter: 'mydummyfastcounter'
            pulseextractionlogic: 'pulseextraction'
            sequencegenerator: 'sequencegenerator'
            pulsegenerator: 'AWG'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fitlogic: 'fit'
            savelogic: 'save'
            fastcounter: 'timetagger_fastcounter'
            microwave: 'mw_sgs100'
            pulsegenerator: 'AWG'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fit'

    poimanager:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizer'
            savelogic: 'save'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:\data\QudiData'
        unix_data_directory: '/$HOME/'
        log_into_daily_directory: True

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
                pausetasks:
                  - scan
                  - odmr
                needsmodules:
                    optimizer: 'optimizer'



gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'save'
            optimizerlogic1: 'optimizer'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    lasergui:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'


    magnet:
        module.Class: 'magnet.Magnet_control.magnet_control_gui.MagnetControlGui'
        connect:
            magnetlogic1: 'magnet_control_logic'
            savelogic: 'save'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'save'

    calculator:
        module.Class: 'magnetic_field_calculator.mf_calculator.CalculatorGui'

    poimanagergui:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanager'
            confocallogic1: 'scannerlogic'

    nv_depth_calculator:
        module.Class: 'analysis_methods.NV_depth_calculator.NVdepthGui'
        connect:
            savelogic: 'save'

    noise_spectrum_calculator:
        module.Class: 'analysis_methods.noise_spectrum.NoiseSpectrumGui'
        connect:
            savelogic: 'save'
            fitlogic: 'fit'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

